
// Dictionary template
{xopen("./templates/Dict.hoc")}

// Writes out connectivity graph
proc graphout() { local i,j,node localobj f, v, conlist
    f = new File($s1)
    conlist = $o2
    f.wopen()
    for i=0, conlist.count()-1 {
        v = conlist.object(i)
        node = v.x[0]
        for j=1, v.size()-1 {
            f.printf("%d %d\n", node, v.x[j])
        }
    }
    f.close()
}

// Writes out spike time information
proc spikeout() { local i localobj f, spikevec, idvec
    
    f = new File($s1)
    spikevec = $o2
    idvec = $o3
    
    f.wopen()
    for i=0, spikevec.size-1 {
	f.printf("%g %d\n", spikevec.x[i], idvec.x[i])
    }
    f.close()
}

// Loads cell type info into a Dict
proc loadCellCategoryInfo() { local i, numCells localobj f, cellTypes, cellType
    
    strdef cellTypeName, cellTypeTemplateName
    
    // The first argument must be a list
    cellTypes = $o1
    
    // The second argument must be the path to the cell types file 
    f = new File()
    f.ropen($s2)
    
    // Scan the first line, which contains the number of cell types
    numCellTypes = f.scanvar()
    
    for i=0, numCellTypes-1 {
        
        // Scan in the cell name, template name, number of cells
	f.scanstr(cellTypeName)
	f.scanstr(cellTypeTemplateName)
	numCells = f.scanvar()
        cellType = new Dict(cellTypeName)
        cellType.addPropertyString("typeName",cellTypeName)
        cellType.addPropertyString("templateName",cellTypeTemplateName)
        cellType.addPropertyScalar("numCells",numCells)
        cellTypes.append(cellType)
    }
    f.close()
    
}

// Loads connectivity info into a Dict
proc loadConnectivityInfo() { local i, synIndex, wdType, standardWeight, standardVelocity, numConnectivityTypes localobj f, connectivityTypes, connectivityType
    
    strdef connectivityName
    
    // The first argument must be a list
    connectivityTypes = $o1
    
    // The second argument must be the path to the main connection file 
    f = new File()
    f.ropen($s2)
    
    // Scan the first line, which contains the number of connectivity matrices
    numConnectivityTypes = f.scanvar()
    
    for i=0, numConnectivityTypes-1 {
        
        // Scan in the connectivity name and synapse index
	f.scanstr(connectivityName)
	synIndex = f.scanvar()
	wdType = f.scanvar()
        if (wdType == 1) {
            connectivityType = new Dict(connectivityName)
            connectivityType.addPropertyString("name",connectivityName)
            connectivityType.addPropertyScalar("synIndex",synIndex)
            connectivityType.addPropertyScalar("wdType",wdType)
            connectivityTypes.append(connectivityType)
        } else if (wdType == 2) {
            standardWeight = f.scanvar()
            standardVelocity = f.scanvar()
            connectivityType = new Dict(connectivityName)
            connectivityType.addPropertyString("name",connectivityName)
            connectivityType.addPropertyScalar("synIndex",synIndex)
            connectivityType.addPropertyScalar("wdType",wdType)
            connectivityType.addPropertyScalar("standardWeight",standardWeight)
            connectivityType.addPropertyScalar("standardVelocity",standardVelocity)
            connectivityTypes.append(connectivityType)
        }
    }
    f.close()
    
}

proc loadStimulationParameters() { localobj f, m strdef stimulationPath
    
    m = $o1
    stimulationPath = $s2
    f = new File(stimulationPath)
    f.ropen()
    m.scanf(f)
    f.close()
    
}